PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = finaltest
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial_2
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  Routine trails
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        curr_item = -1

        import random
      Begin Routine:
        curr_item += 1

        amharic1 = amharic_list1[curr_item]
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $amharic1
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  Routine LoadCharacters
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    CodeComponent codeLoader
      Code Type = Auto->JS
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      Before Experiment:
        import random


        characters_words = {}
        space = '-'

        # This is just a helper
        # function that we use for testing phase diamonds
        def center_string(a_string, b_string, return_string):
            # Identify the larger and smaller strings
            if len(a_string) >= len(b_string):
                larger_string = a_string
                smaller_string = b_string
            else:
                larger_string = b_string
                smaller_string = a_string

            # Calculate the total padding needed
            total_padding = len(larger_string) - len(smaller_string)

            # Calculate padding on each side
            right_padding = total_padding // 2
            left_padding = total_padding - right_padding

            # Center the smaller_string within the larger_string
            centered_string = space * left_padding + return_string + space * right_padding

            # Return the specified string
            if return_string == a_string:
                return centered_string
            elif return_string == b_string:
                return centered_string
            else:
                raise ValueError("return_string must be either 'a_string' or 'b_string'")
      Begin Experiment:
        #make empty lists
        #set 1
        word_list1 = []
        amharic_list1 = []

        #set 2
        word_list2 = []
        amharic_list2 = []

        #set 3
        word_list3 = []
        amharic_list3 = []

        #set 4
        word_list4 = []
        amharic_list4 = []

        #check and X
        markers = []

        #practice sets
        practice_amharic = []
        practice_words = []

        checkmark_reps = 0
        xmark_reps = 0
      Begin Routine:
        #save current word and color on each iteration of the loop
        # (for tests between learning sets)
        #set 1
        word_list1.append(words_set1)
        amharic_list1.append(amharic_set1)

        #set 2
        word_list2.append(words_set2)
        amharic_list2.append(amharic_set2)

        #set 3
        word_list3.append(words_set3)
        amharic_list3.append(amharic_set3)

        #set 4
        word_list4.append(words_set4)
        amharic_list4.append(amharic_set4)

        #symbols
        markers.append(symbols)

        #practices
        practice_amharic.append(amharic_practices)
        practice_words.append(words_practice)

        # Append it onto the dictionary (for final test)
        characters_words[amharic_set1] = words_set1
        characters_words[amharic_set2] = words_set2
        characters_words[amharic_set3] = words_set3
        characters_words[amharic_set4] = words_set4
      End Routine:
        # Our trial happens 12 times because
        # we have 12 columns in our sheets

        # Thus... the following code tabs occur

        # Before experiment: 1
        # Begin experiment: 1
        # Begin Routine: 12
        # Each frame: 12 * frames
        # End Routine: 12
        # End experiment: 1
  Routine WelcomeSlide
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    TextComponent Welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We will now begin the final part of the experiment.
        (Press ENTER to continue)
    KeyboardComponent goNext
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the next slides, you will be prompted to give the translation of a given symbol.

        Once you have typed the answer, press ENTER to continue. If you do not remember the symbol, you can simply press ENTER.

        You have unlimited time to respond to each question.

        To continue, press ENTER
    KeyboardComponent goNext1
      allowedKeys = 'return', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestQuestion
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    TextboxComponent answer_box
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.35)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent symbol
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text [set every frame] = $test_questions[curr_item][0]
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    CodeComponent RandomQuestion
      Code Type = Auto->JS
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      Begin Experiment:
        # Set item counter to be zero
        curr_item = -1
      Begin Routine:
        # Makes sure we don't get key errors going past index 23
        if curr_item < 24:
            curr_item += 1
            curr_item %= 24
  Routine GenerateQuestions
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    CodeComponent genQuestions
      Code Type = Auto->JS
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      Begin Routine:
        # Generate the subset of the words that they will be tested on
        select1 = random.sample(list(range(0,23)), 12)
        select2 = random.sample(list(range(24,48)), 12)
        selected_numbers = select1 + select2
        #selected_numbers = random.sample(list(range(48)), 24) # Just selects 24 randomly

        characters = list(characters_words.keys())
        test_questions = {}
        for index, number in zip(list(range(24)), selected_numbers):
            test_questions[index] = (characters[number], characters_words[characters[number]])

        # test_questions is a dictionary with an index (0-23) as a key and the value being an ordered pair (character, meaning)
        print("ANSWER KEY:")
        print(test_questions)
  Routine ThankYou
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    CodeComponent Debug
      Code Type = Auto->JS
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      Begin Routine:
        thankyoumessage = "Thank you for participating, You got " + str(correct) + " out of 24 correct"
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = THANK YOU FOR PARTICIPATING!!!!!
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  Routine Evaluate
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    CodeComponent CorrectAnswers
      Code Type = Auto->JS
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      Begin Experiment:
        correct = 0
        message = "You got " + str(correct) + " out of 24 correct!"
      Begin Routine:
        if answer_box.text.strip().upper() == test_questions[curr_item][1].upper():
            correct += 1
            print("Debugging: This is correct\n Correct = " + str(correct))
  Routine test1
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    CodeComponent codeSymbol
      Code Type = Py
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      Begin Experiment:
        #item counter
        curr_item = -1

        index_to_button = {
            1:'left',
            2:'right',
            0:'up',
            3:'down',
        }

        import random
      Begin Routine:
        #incraments item counter by one
        curr_item += 1

        correct_word1 = word_list1[curr_item] #THIS IS THE RIGHT ANSWER
        amharic1 = amharic_list1[curr_item]

        #preparing answer choices
        lottery_list1 = []

        #add the right answer
        lottery_list1.append(correct_word1)

        #add 3 more non repeating answers
        copied_word1_list1 = []
        copied_word1_list1 = word_list1.copy() #copy word list
        copied_word1_list1.remove(correct_word1) #remove the right answer
        shuffle(copied_word1_list1) #shuffle up the copied list

        for x in range(0,3):    #add 3 from the shuffled list
            lottery_list1.append(copied_word1_list1[x])

        random.shuffle(lottery_list1)  #mix up the answer choices

        index_of_correct_answer = lottery_list1.index(correct_word1) #index of the correct word

        correctAns = index_to_button[index_of_correct_answer] #correct answer in key form

        # Create a diamond of answer choices
        longest_string = max(lottery_list1, key=len)
        diamond = (
            (len(longest_string) * space) + space + center_string(lottery_list1[0], longest_string, lottery_list1[0]) + space + (len(longest_string) * space) + "\n"
            + center_string(lottery_list1[1], longest_string, lottery_list1[1]) + (len(longest_string) * space) + space + center_string(lottery_list1[2], longest_string, lottery_list1[2]) + "\n"
            + (len(longest_string) * space) + space + center_string(lottery_list1[0], lottery_list1[3], lottery_list1[3]) + space + (len(longest_string) * space)
        ) # This drove me to insanity
        diamondA = (
            (len(longest_string) * space) + space + center_string(lottery_list1[0], longest_string, lottery_list1[0]) + space + (len(longest_string) * space) + "\n"
            + (len(center_string(lottery_list1[1], longest_string, lottery_list1[1])) * space) + (len(longest_string) * space) + space + (len(center_string(lottery_list1[2], longest_string, lottery_list1[2])) * space) + "\n"
            + (len(longest_string) * space) + space + (len(center_string(lottery_list1[0], lottery_list1[3], lottery_list1[3])) * space) + space + (len(longest_string) * space)
        )

        diamondB = (
            (len(longest_string) * space) + space + (len(center_string(lottery_list1[0], longest_string, lottery_list1[0])) * space) + space + (len(longest_string) * space) + "\n"
            + center_string(lottery_list1[1], longest_string, lottery_list1[1]) + (len(longest_string) * space) + space + (len(center_string(lottery_list1[2], longest_string, lottery_list1[2])) * space) + "\n"
            + (len(longest_string) * space) + space + (len(center_string(lottery_list1[0], lottery_list1[3], lottery_list1[3])) * space) + space + (len(longest_string) * space)
        )

        diamondC = (
            (len(longest_string) * space) + space + (len(center_string(lottery_list1[0], longest_string, lottery_list1[0])) * space) + space + (len(longest_string) * space) + "\n"
            + (len(center_string(lottery_list1[1], longest_string, lottery_list1[1])) * space) + (len(longest_string) * space) + space + center_string(lottery_list1[2], longest_string, lottery_list1[2]) + "\n"
            + (len(longest_string) * space) + space + (len(center_string(lottery_list1[0], lottery_list1[3], lottery_list1[3])) * space) + space + (len(longest_string) * space)
        )

        diamondD = (
            (len(longest_string) * space) + space + (len(center_string(lottery_list1[0], longest_string, lottery_list1[0])) * space) + space + (len(longest_string) * space) + "\n"
            + (len(center_string(lottery_list1[1], longest_string, lottery_list1[1])) * space) + (len(longest_string) * space) + space + (len(center_string(lottery_list1[2], longest_string, lottery_list1[2])) * space) + "\n"
            + (len(longest_string) * space) + space + center_string(lottery_list1[0], lottery_list1[3], lottery_list1[3]) + space + (len(longest_string) * space)
        )
    TextComponent textAmharic
      letterHeight = 0.3
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $amharic1
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    TextComponent textOptionA
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $diamondA
    TextComponent textOptionB
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $diamondB
    TextComponent textOptionC
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $diamondC
    TextComponent textOptionD
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $diamondD
    TextComponent textDiamond
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 4.5
      text [set every repeat] = $diamond
      wrapWidth = 2000
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    KeyboardComponent key_resp
      allowedKeys = 'right','up','left','down'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 4.5
      storeCorrect = True
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    KeyboardComponent debugging_press_enter_to_skip_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent debugging_press_enter_to_skip_15
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine test2
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    CodeComponent codeSymbol_2
      Code Type = Py
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      Begin Experiment:
        #item counter
        curr_item2 = -1

        index_to_button = {
            1:'left',
            2:'right',
            0:'up',
            3:'down',
        }

        import random
      Begin Routine:
        #incraments item counter by one
        curr_item2 += 1

        correct_word2 = word_list2[curr_item2] #THIS IS THE RIGHT ANSWER
        amharic2 = amharic_list2[curr_item2]

        #preparing answer choices
        lottery_list2 = []

        #add the right answer
        lottery_list2.append(correct_word2)

        #add 3 more non repeating answers
        copied_word2_list2 = []
        copied_word2_list2 = word_list2.copy() #copy word list
        copied_word2_list2.remove(correct_word2) #remove the right answer
        shuffle(copied_word2_list2) #shuffle up the copied list

        for x in range(0,3):    #add 3 from the shuffled list
            lottery_list2.append(copied_word2_list2[x])

        random.shuffle(lottery_list2)  #mix up the answer choices

        index_of_correct_answer2 = lottery_list2.index(correct_word2) #index of the correct word

        correctAns2 = index_to_button[index_of_correct_answer2] #correct answer in key form
    TextComponent textAmharic_2
      letterHeight = 0.3
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $amharic2
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    TextComponent textOptionA_2
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $lottery_list2[0]
    TextComponent textOptionB_2
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list2[1]
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    TextComponent textOptionC_2
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list2[2]
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    TextComponent textOptionD_2
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list2[3]
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    TextComponent textDiamond_2
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $f"     {lottery_list2[0]}\n   {lottery_list2[1]}   {lottery_list2[2]}\n     {lottery_list2[3]}"
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    KeyboardComponent key_resp_2
      allowedKeys = 'right','up','left','down'
      correctAns = $correctAns2
      forceEndRoutine = False
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    KeyboardComponent debugging_press_enter_to_skip_16
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine test3
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    CodeComponent codeSymbol_3
      Code Type = Py
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      Begin Experiment:
        #item counter
        curr_item3 = -1

        index_to_button = {
            1:'left',
            2:'right',
            0:'up',
            3:'down',
        }

        import random
      Begin Routine:
        #incraments item counter by one
        curr_item3 += 1

        correct_word3 = word_list3[curr_item3] #THIS IS THE RIGHT ANSWER
        amharic3 = amharic_list3[curr_item3]

        #preparing answer choices
        lottery_list3 = []

        #add the right answer
        lottery_list3.append(correct_word3)

        #add 3 more non repeating answers
        copied_word3_list3 = []
        copied_word3_list3 = word_list3.copy() #copy word list
        copied_word3_list3.remove(correct_word3) #remove the right answer
        shuffle(copied_word3_list3) #shuffle up the copied list

        for x in range(0,3):    #add 3 from the shuffled list
            lottery_list3.append(copied_word3_list3[x])

        random.shuffle(lottery_list3)  #mix up the answer choices

        index_of_correct_answer3 = lottery_list3.index(correct_word3) #index of the correct word

        correctAns3 = index_to_button[index_of_correct_answer3] #correct answer in key form
    TextComponent textAmharic_3
      letterHeight = 0.3
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $amharic3
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    TextComponent textOptionA_3
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $lottery_list3[0]
    TextComponent textOptionB_3
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list3[1]
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    TextComponent textOptionC_3
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list3[2]
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    TextComponent textOptionD_3
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list3[3]
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    KeyboardComponent key_resp_3
      allowedKeys = 'right','up','left','down'
      correctAns = $correctAns3
      forceEndRoutine = False
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    KeyboardComponent debugging_press_enter_to_skip_17
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine test4
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    CodeComponent codeSymbol_4
      Code Type = Py
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      Begin Experiment:
        #item counter
        curr_item4 = -1

        index_to_button = {
            1:'left',
            2:'right',
            0:'up',
            3:'down',
        }

        import random
      Begin Routine:
        #incraments item counter by one
        curr_item4 += 1

        correct_word4 = word_list4[curr_item4] #THIS IS THE RIGHT ANSWER
        amharic4 = amharic_list4[curr_item4]

        #preparing answer choices
        lottery_list4 = []

        #add the right answer
        lottery_list4.append(correct_word4)

        #add 3 more non repeating answers
        copied_word4_list4 = []
        copied_word4_list4 = word_list4.copy() #copy word list
        copied_word4_list4.remove(correct_word4) #remove the right answer
        shuffle(copied_word4_list4) #shuffle up the copied list

        for x in range(0,3):    #add 3 from the shuffled list
            lottery_list4.append(copied_word4_list4[x])

        random.shuffle(lottery_list4)  #mix up the answer choices

        index_of_correct_answer4 = lottery_list4.index(correct_word4) #index of the correct word

        correctAns4 = index_to_button[index_of_correct_answer4] #correct answer in key form
    TextComponent textAmharic_4
      letterHeight = 0.3
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $amharic4
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    TextComponent textOptionA_4
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $lottery_list4[0]
    TextComponent textOptionB_4
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list4[1]
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    TextComponent textOptionC_4
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list4[2]
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    TextComponent textOptionD_4
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list4[3]
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    TextComponent textDiamond_4
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $f"     {lottery_list4[0]}\n   {lottery_list4[1]}   {lottery_list4[2]}\n     {lottery_list4[3]}"
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    KeyboardComponent key_resp_4
      allowedKeys = 'right','up','left','down'
      correctAns = $correctAns4
      forceEndRoutine = False
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    KeyboardComponent debugging_press_enter_to_skip_18
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine plusBetween
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    TextComponent plus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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    KeyboardComponent debugging_press_enter_to_skip_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine breakBetweenRepeats
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    TextComponent five_seconds
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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    SoundComponent maybe_a_beep
      sound [set every repeat] = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent debugging_press_enter_to_skip_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine routine_30Seconds
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    TextComponent thirtySeconds
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = +
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    CodeComponent var_30_secs
      Code Type = Auto->JS
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      Begin Experiment:
        print("30 seconds")
    KeyboardComponent debugging_press_enter_to_skip_6
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine Increment
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    CodeComponent increment_index
      Code Type = Auto->JS
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      Begin Experiment:
        learning_index = -1
        practice_index = -1
      Begin Routine:
        learning_index += 1
        learning_index %= len(keys)

        practice_index += 1
        practice_index %= len(practice_keys)
  Routine randomize_set
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    CodeComponent randomize_learning_set
      Code Type = Auto->JS
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      Begin Routine:
        keys = list(range(12))
        random.shuffle(keys)
        print("learning set order: " + str(keys))

        practice_keys = list(range(6))
        random.shuffle(practice_keys)
        print("learning set order: " + str(keys))

        practice_keys2 = list(range(6,12))
        random.shuffle(practice_keys2)
        print("learning set order: " + str(keys))
  Routine start_test
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The test phase will now begin.

        If you do not know an answer do not press anything. Please avoid guessing.

        Press SPACE to continue
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine breakBetweenSets
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    TextComponent cross
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = +
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    KeyboardComponent debugging_press_enter_to_skip_8
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine amharic1_B
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    TextComponent amharics1_2
      letterHeight = .5
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list1[keys[learning_index]][0]
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    ImageComponent words1_image_2
      image [set every repeat] = $amharic_word_list1[keys[learning_index]][2]
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent amharic_word_code1_2
      Code Type = Auto->JS
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      Begin Routine:
        print("Index: " + str(keys[learning_index]) +
              "\n Character: " + str(amharic_word_list1[keys[learning_index]][0]) +
              "\n Meaning: " + str(amharic_word_list1[keys[learning_index]][1]) +
              "\n Image Path: " + str(amharic_word_list1[keys[learning_index]][2]))
    KeyboardComponent debugging_press_enter_to_skip_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine amharic1_A
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    TextComponent amharics1
      letterHeight = .5
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list1[keys[learning_index]][0]
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    TextComponent words1
      letterHeight = 0.15
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list1[keys[learning_index]][1]
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    CodeComponent amharic_word_code1_3
      Code Type = Auto->JS
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      Begin Routine:
        print("Index: " + str(keys[learning_index]) +
              "\n Character: " + str(amharic_word_list1[keys[learning_index]][0]) +
              "\n Meaning: " + str(amharic_word_list1[keys[learning_index]][1]) +
              "\n Image Path: " + str(amharic_word_list1[keys[learning_index]][2]))
    KeyboardComponent debugging_press_enter_to_skip
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine amharic2_A
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    TextComponent amharics2
      letterHeight = 0.5
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list2[keys[learning_index]][0]
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    TextComponent words2
      letterHeight = 0.15
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list2[keys[learning_index]][1]
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    CodeComponent amharic_word_code_2
      Code Type = Auto->JS
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      Begin Routine:
        print("Index: " + str(keys[learning_index]) +
              "\n Character: " + str(amharic_word_list2[keys[learning_index]][0]) +
              "\n Meaning: " + str(amharic_word_list2[keys[learning_index]][1]) +
              "\n Image Path: " + str(amharic_word_list2[keys[learning_index]][2]))
    KeyboardComponent debugging_press_enter_to_skip_9
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine amharic2_B
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    TextComponent amharics2_2
      letterHeight = 0.5
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list2[keys[learning_index]][0]
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    ImageComponent words2_image_2
      image [set every repeat] = $amharic_word_list2[keys[learning_index]][2]
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent amharic_word_code
      Code Type = Auto->JS
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      Begin Routine:
        print("Index: " + str(keys[learning_index]) +
              "\n Character: " + str(amharic_word_list2[keys[learning_index]][0]) +
              "\n Meaning: " + str(amharic_word_list2[keys[learning_index]][1]) +
              "\n Image Path: " + str(amharic_word_list2[keys[learning_index]][2]))
    KeyboardComponent debugging_press_enter_to_skip_10
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine amharic3_A
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    TextComponent amharics3
      letterHeight = 0.5
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list3[keys[learning_index]][0]
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    ImageComponent words3_image
      image [set every repeat] = $amharic_word_list3[keys[learning_index]][2]
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code3
      Code Type = Auto->JS
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      Begin Routine:
        print("Index: " + str(keys[learning_index]) +
              "\n Character: " + str(amharic_word_list3[keys[learning_index]][0]) +
              "\n Meaning: " + str(amharic_word_list3[keys[learning_index]][1]) +
              "\n Image Path: " + str(amharic_word_list3[keys[learning_index]][2]))
    KeyboardComponent debugging_press_enter_to_skip_11
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine amharic3_B
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    TextComponent amharics3_2
      letterHeight = 0.5
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list3[keys[learning_index]][0]
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    TextComponent words3_2
      letterHeight = 0.15
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list3[keys[learning_index]][1]
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    CodeComponent code3_2
      Code Type = Auto->JS
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      Begin Routine:
        print("Index: " + str(keys[learning_index]) +
              "\n Character: " + str(amharic_word_list3[keys[learning_index]][0]) +
              "\n Meaning: " + str(amharic_word_list3[keys[learning_index]][1]) +
              "\n Image Path: " + str(amharic_word_list3[keys[learning_index]][2]))
    KeyboardComponent debugging_press_enter_to_skip_12
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine amharic4_A
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    TextComponent amharics4
      letterHeight = 0.5
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list4[keys[learning_index]][0]
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    ImageComponent words4_image
      image [set every repeat] = $amharic_word_list4[keys[learning_index]][2]
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code4
      Code Type = Auto->JS
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      Begin Routine:
        print("Index: " + str(keys[learning_index]) +
              "\n Character: " + str(amharic_word_list4[keys[learning_index]][0]) +
              "\n Meaning: " + str(amharic_word_list4[keys[learning_index]][1]) +
              "\n Image Path: " + str(amharic_word_list4[keys[learning_index]][2]))
    KeyboardComponent debugging_press_enter_to_skip_13
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine amharic4_B
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    TextComponent amharics4_2
      letterHeight = 0.5
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list4[keys[learning_index]][0]
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    TextComponent words4_2
      letterHeight = 0.15
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $amharic_word_list4[keys[learning_index]][1]
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    CodeComponent code4_2
      Code Type = Auto->JS
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      Begin Routine:
        print("Index: " + str(keys[learning_index]) +
              "\n Character: " + str(amharic_word_list4[keys[learning_index]][0]) +
              "\n Meaning: " + str(amharic_word_list4[keys[learning_index]][1]) +
              "\n Image Path: " + str(amharic_word_list4[keys[learning_index]][2]))
    KeyboardComponent debugging_press_enter_to_skip_14
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine WelcomeScreen
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment

        Press SPACE when ready
    KeyboardComponent Press_Space_When_Ready
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine checkForCorr
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_5.corr == 1:
            checkmark_reps = 1
            xmark_reps = 0
        if key_resp_5.corr == 0:
            checkmark_reps = 0
            xmark_reps = 1
  Routine checkForCorr_2
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_6.corr == 1:
            checkmark_reps = 1
            xmark_reps = 0
        if key_resp_6.corr == 0:
            checkmark_reps = 0
            xmark_reps = 1
  Routine checkForCorr_3
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_7.corr == 1:
            checkmark_reps = 1
            xmark_reps = 0
        if key_resp_7.corr == 0:
            checkmark_reps = 0
            xmark_reps = 1
  Routine checkForCorr_4
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_8.corr == 1:
            checkmark_reps = 1
            xmark_reps = 0
        if key_resp_8.corr == 0:
            checkmark_reps = 0
            xmark_reps = 1
  Routine checkmark
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    TextComponent textCheck
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $markers[0]
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    KeyboardComponent debugging_press_enter_to_skip_7
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine xmark
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    TextComponent textXmark
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $markers[1]
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    KeyboardComponent debugging_press_enter_to_skip_26
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine resetReps
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        checkmark_reps = 0
        xmark_reps = 0
  Routine test1_NEW
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    CodeComponent codeSymbol_5
      Code Type = Py
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      Begin Experiment:
        #item counter
        curr_item = -1

        index_to_button = {
            1:'left',
            2:'right',
            0:'up',
            3:'down',
        }

        import random
      Begin Routine:
        #incraments item counter by one
        curr_item += 1
        curr_item %= 11

        correct_word1 = word_list1[curr_item] #THIS IS THE RIGHT ANSWER
        amharic1 = amharic_list1[curr_item]

        #preparing answer choices
        lottery_list1 = []

        #add the right answer
        lottery_list1.append(correct_word1)

        #add 3 more non repeating answers
        copied_word1_list1 = []
        copied_word1_list1 = word_list1.copy() #copy word list
        copied_word1_list1.remove(correct_word1) #remove the right answer
        shuffle(copied_word1_list1) #shuffle up the copied list

        for x in range(0,3):    #add 3 from the shuffled list
            lottery_list1.append(copied_word1_list1[x])

        random.shuffle(lottery_list1)  #mix up the answer choices

        index_of_correct_answer = lottery_list1.index(correct_word1) #index of the correct word

        correctAns = index_to_button[index_of_correct_answer] #correct answer in key form
    TextComponent textAmharic_5
      letterHeight = 0.3
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $amharic1
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    TextComponent textOptionA_5
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $lottery_list1[0]
    TextComponent textOptionB_5
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list1[1]
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    TextComponent textOptionC_5
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list1[2]
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    TextComponent textOptionD_5
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list1[3]
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    TextComponent textDiamond_3
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 4.5
      text [set every repeat] = $f"     {lottery_list1[0]}\n   {lottery_list1[1]}   {lottery_list1[2]}\n     {lottery_list1[3]}"
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    KeyboardComponent key_resp_5
      allowedKeys = 'right','up','left','down', 'space'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 4.5
      storeCorrect = True
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    KeyboardComponent debugging_press_enter_to_skip_19
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test2_NEW
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    CodeComponent codeSymbol_6
      Code Type = Py
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      Begin Experiment:
        #item counter
        curr_item2 = -1

        index_to_button = {
            1:'left',
            2:'right',
            0:'up',
            3:'down',
        }

        import random
      Begin Routine:
        #incraments item counter by one
        curr_item2 += 1

        correct_word2 = word_list2[curr_item2] #THIS IS THE RIGHT ANSWER
        amharic2 = amharic_list2[curr_item2]

        #preparing answer choices
        lottery_list2 = []

        #add the right answer
        lottery_list2.append(correct_word2)

        #add 3 more non repeating answers
        copied_word2_list2 = []
        copied_word2_list2 = word_list2.copy() #copy word list
        copied_word2_list2.remove(correct_word2) #remove the right answer
        shuffle(copied_word2_list2) #shuffle up the copied list

        for x in range(0,3):    #add 3 from the shuffled list
            lottery_list2.append(copied_word2_list2[x])

        random.shuffle(lottery_list2)  #mix up the answer choices

        index_of_correct_answer2 = lottery_list2.index(correct_word2) #index of the correct word

        correctAns2 = index_to_button[index_of_correct_answer2] #correct answer in key form
    TextComponent textAmharic_6
      letterHeight = 0.3
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $amharic2
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    TextComponent textOptionA_6
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $lottery_list2[0]
    TextComponent textOptionB_6
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list2[1]
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    TextComponent textOptionC_6
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list2[2]
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    TextComponent textOptionD_6
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list2[3]
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    TextComponent textDiamond_5
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 4.5
      text [set every repeat] = $f"     {lottery_list2[0]}\n   {lottery_list2[1]}   {lottery_list2[2]}\n     {lottery_list2[3]}"
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    KeyboardComponent key_resp_6
      allowedKeys = 'right','up','left','down'
      correctAns = $correctAns2
      forceEndRoutine = True
      startVal [time (s)] = 4.5
      storeCorrect = True
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    KeyboardComponent debugging_press_enter_to_skip_20
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test3_NEW
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    CodeComponent codeSymbol_7
      Code Type = Py
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      Begin Experiment:
        #item counter
        curr_item3 = -1

        index_to_button = {
            1:'left',
            2:'right',
            0:'up',
            3:'down',
        }

        import random
      Begin Routine:
        #incraments item counter by one
        curr_item3 += 1

        correct_word3 = word_list3[curr_item3] #THIS IS THE RIGHT ANSWER
        amharic3 = amharic_list3[curr_item3]

        #preparing answer choices
        lottery_list3 = []

        #add the right answer
        lottery_list3.append(correct_word3)

        #add 3 more non repeating answers
        copied_word3_list3 = []
        copied_word3_list3 = word_list3.copy() #copy word list
        copied_word3_list3.remove(correct_word3) #remove the right answer
        shuffle(copied_word3_list3) #shuffle up the copied list

        for x in range(0,3):    #add 3 from the shuffled list
            lottery_list3.append(copied_word3_list3[x])

        random.shuffle(lottery_list3)  #mix up the answer choices

        index_of_correct_answer3 = lottery_list3.index(correct_word3) #index of the correct word

        correctAns3 = index_to_button[index_of_correct_answer3] #correct answer in key form
    TextComponent textAmharic_7
      letterHeight = 0.3
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $amharic3
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    TextComponent textOptionA_7
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $lottery_list3[0]
    TextComponent textOptionB_7
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list3[1]
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    TextComponent textOptionC_7
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list3[2]
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    TextComponent textOptionD_7
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list3[3]
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    TextComponent textDiamond_6
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 4.5
      text [set every repeat] = $f"     {lottery_list3[0]}\n   {lottery_list3[1]}   {lottery_list3[2]}\n     {lottery_list3[3]}"
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    KeyboardComponent key_resp_7
      allowedKeys = 'right','up','left','down', 'space'
      correctAns = $correctAns3
      forceEndRoutine = True
      startVal [time (s)] = 4.5
      storeCorrect = True
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    KeyboardComponent debugging_press_enter_to_skip_21
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test4_NEW
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    CodeComponent codeSymbol_8
      Code Type = Py
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      Begin Experiment:
        #item counter
        curr_item4 = -1

        index_to_button = {
            1:'left',
            2:'right',
            0:'up',
            3:'down',
        }

        import random
      Begin Routine:
        #incraments item counter by one
        curr_item4 += 1

        correct_word4 = word_list4[curr_item4] #THIS IS THE RIGHT ANSWER
        amharic4 = amharic_list4[curr_item4]

        #preparing answer choices
        lottery_list4 = []

        #add the right answer
        lottery_list4.append(correct_word4)

        #add 3 more non repeating answers
        copied_word4_list4 = []
        copied_word4_list4 = word_list4.copy() #copy word list
        copied_word4_list4.remove(correct_word4) #remove the right answer
        shuffle(copied_word4_list4) #shuffle up the copied list

        for x in range(0,3):    #add 3 from the shuffled list
            lottery_list4.append(copied_word4_list4[x])

        random.shuffle(lottery_list4)  #mix up the answer choices

        index_of_correct_answer4 = lottery_list4.index(correct_word4) #index of the correct word

        correctAns4 = index_to_button[index_of_correct_answer4] #correct answer in key form
    TextComponent textAmharic_8
      letterHeight = 0.3
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $amharic4
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    TextComponent textOptionA_8
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $lottery_list4[0]
    TextComponent textOptionB_8
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list4[1]
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    TextComponent textOptionC_8
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list4[2]
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    TextComponent textOptionD_8
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list4[3]
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    TextComponent textDiamond_7
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 4.5
      text [set every repeat] = $f"     {lottery_list4[0]}\n   {lottery_list4[1]}   {lottery_list4[2]}\n     {lottery_list4[3]}"
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    KeyboardComponent key_resp_8
      allowedKeys = 'right','up','left','down', 'space'
      correctAns = $correctAns4
      forceEndRoutine = True
      startVal [time (s)] = 4.5
      storeCorrect = True
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    KeyboardComponent debugging_press_enter_to_skip_22
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_welcome
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Before moving onto the proper data collection section you will be shown a short version of what the real thing will look like to better prepare you.

        You will be shown 12 total symbols to learn and given an accompanying test. The real thing will follow the same procedure but differ in scale.

        Press SPACE to move foward with the practice trials.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_test
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    CodeComponent codeSymbol_9
      Code Type = Py
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      Begin Experiment:
        #item counter
        curr_item = -1

        index_to_button = {
            1:'left',
            2:'right',
            0:'up',
            3:'down',
        }

        import random
      Begin Routine:
        #incraments item counter by one
        curr_item += 1

        correct_word_p = practice_words[curr_item] #THIS IS THE RIGHT ANSWER
        amharic_p = practice_amharic[curr_item]

        #preparing answer choices
        lottery_list_p = []

        #add the right answer
        lottery_list_p.append(correct_word_p)

        #add 3 more non repeating answers
        copied_word_listP = []
        copied_word_listP = practice_words.copy() #copy word list
        copied_word_listP.remove(correct_word_p) #remove the right answer
        shuffle(copied_word_listP) #shuffle up the copied list

        for x in range(0,3):    #add 3 from the shuffled list
            lottery_list_p.append(copied_word_listP[x])

        random.shuffle(lottery_list_p)  #mix up the answer choices

        index_of_correct_answer = lottery_list_p.index(correct_word_p) #index of the correct word

        correctAns = index_to_button[index_of_correct_answer] #correct answer in key form
    TextComponent textAmharic_9
      letterHeight = 0.3
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $amharic_p
    TextComponent textOptionA_9
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $lottery_list_p[0]
    TextComponent textOptionB_9
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list_p[1]
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    TextComponent textOptionC_9
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list_p[2]
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    TextComponent textOptionD_9
      letterHeight = 0.05
      pos = (.3, 0.0)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $lottery_list_p[3]
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    TextComponent textDiamond_8
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 4.5
      text [set every repeat] = $f"     {lottery_list_p[0]}\n   {lottery_list_p[1]}   {lottery_list_p[2]}\n     {lottery_list_p[3]}"
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    KeyboardComponent key_resp_10
      allowedKeys = 'right','up','left','down', 'space'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 4.5
      storeCorrect = True
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    KeyboardComponent debugging_press_enter_to_skip_23
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine checkForCorr_5
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  Routine practice_learing
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    TextComponent practice_amharic
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $practice_set[keys[learning_index]][0]
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        print("Index: " + str(keys[learning_index]) +
              "\n Character: " + str(amharic_word_practice[keys[learning_index]][0]) +
              "\n Meaning: " + str(amharic_word_practice[keys[learning_index]][1]) +
              "\n Image Path: " + str(amharic_word_practice[keys[learning_index]][2]))
  Routine practice_wrdss
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    TextComponent practice_amharicc
      letterHeight = 0.5
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $practice_list1[practice_keys[practice_index]][0]
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    TextComponent practice_wordssss
      letterHeight = 0.15
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $practice_list1[practice_keys[practice_index]][1]
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    KeyboardComponent debugging_press_enter_to_skip_24
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine practice_images
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    TextComponent amharic_practice2
      letterHeight = 0.5
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $practice_list2[practice_keys2[practice_index]][0]
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    ImageComponent image_practice
      image [set every repeat] = $practice_list2[practice_keys2[practice_index]][2]
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent debugging_press_enter_to_skip_25
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine loadAndRemoveNone
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    CodeComponent loadWordsAndRemoveNone
      Code Type = Auto->JS
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      Begin Routine:
        #getting rid of last none variable (for tests between sets)
        #set 1
        word_list1.remove(None)
        amharic_list1.remove(None)

        #set 2
        word_list2.remove(None)
        amharic_list2.remove(None)

        #set 3
        word_list3.remove(None)
        amharic_list3.remove(None)

        #set 4
        word_list4.remove(None)
        amharic_list4.remove(None)

        # Removes None from practice set
        practice_amharic.remove(None)
        practice_words.remove(None)

        # Removes None from characters_words (for final test)
        del characters_words[None]

        # We now have a dictionary 'characters_words' where the keys are
        # Amharic characters, and the values are the meaning they correspond to.
      End Routine:
        # Creates a dictionary for each word list

        amharic_word_list1 = {}
        amharic_word_list2 = {}
        amharic_word_list3 = {}
        amharic_word_list4 = {}
        practice_list = {}

        for i in range(12):
            amharic_word_list1[i] = (amharic_list1[i], word_list1[i], str(f"pictures/{word_list1[i]}.jpg"))
            amharic_word_list2[i] = (amharic_list2[i], word_list2[i], str(f"pictures/{word_list2[i]}.jpg"))
            amharic_word_list3[i] = (amharic_list3[i], word_list3[i], str(f"pictures/{word_list3[i]}.jpg"))
            amharic_word_list4[i] = (amharic_list4[i], word_list4[i], str(f"pictures/{word_list4[i]}.jpg"))
            practice_list[i] = (practice_amharic[i], practice_words[i], str(f"pictures/{practice_words[i]}.jpg"))

        practice_keys1 = list(range(12))[:6]
        practice_keys2 = list(range(12))[6:]

        practice_list1 = {key: practice_list[key] for key in practice_keys1}
        practice_list2 = {key: practice_list[key] for key in practice_keys2}

        for i in range(12):
            print(amharic_word_list1[i])
            print(amharic_word_list2[i])
            print(amharic_word_list3[i])
            print(amharic_word_list4[i])
            print(practice_list[i])
  Routine PracInstructions1
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Now you're given a 30 second break before you enter the testing phase.

        For the sake of practice we'll skip the testing portion and go straight to learning the next set.

        After that, you will be tested on both sets of words.

        Press SPACEto continue
    KeyboardComponent press_space_to_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine pracInstructions2
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  Routine COUNTERBALANCE_AND_NUMREPS
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    CodeComponent Set_Counterbalance_Here_And_NumReps
      Code Type = Auto->JS
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      Before Experiment:
        numReps = 8

        # This is the amount of repetitions
        # for each set of words.
        # Usually we set it to 8, but for debugging set it to 1.
      Begin Experiment:
        #counterbalance = True
        counterbalance = False


        # In the counterbalance order, we cancel the B trials
        if counterbalance == True:
            nreps_A = 0
            nreps_B = 1
        else:
            nreps_A = 1
            nreps_B = 0
Flow
  Routine COUNTERBALANCE_AND_NUMREPS
  LoopInitiator LoopParameters loopType="TrialHandler"
    conditionsFile = testSymbols2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'symbols': '✓', 'amharic_set1': 'ቮ', 'words_set1': 'cats', 'amharic_set2': 'ኈ', 'words_set2': 'fishing', 'amharic_set3': 'ሐ', 'words_set3': 'go', 'amharic_set4': 'ና', 'words_set4': 'dance', 'amharic_practices': '፨', 'words_practice': 'hike', 'image_practice': 'pictures/hike.jpg'},
      {'symbols': '✗', 'amharic_set1': 'ተ', 'words_set1': 'north', 'amharic_set2': 'ኴ', 'words_set2': 'book', 'amharic_set3': 'ሜ', 'words_set3': 'artist', 'amharic_set4': 'ኞ', 'words_set4': 'education', 'amharic_practices': '፻', 'words_practice': 'I', 'image_practice': 'pictures/I.jpg'},
      {'symbols': None, 'amharic_set1': 'ቺ', 'words_set1': 'map', 'amharic_set2': 'ዄ', 'words_set2': 'mirror', 'amharic_set3': 'ሣ', 'words_set3': 'ring', 'amharic_set4': 'ኧ', 'words_set4': 'smart', 'amharic_practices': 'ቇ', 'words_practice': 'be', 'image_practice': 'pictures/be.jpg'},
      {'symbols': None, 'amharic_set1': 'ኇ', 'words_set1': 'travel', 'amharic_set2': 'ጕ', 'words_set2': 'happy', 'amharic_set3': 'ሯ', 'words_set3': 'downtown', 'amharic_set4': 'ኬ', 'words_set4': 'late', 'amharic_practices': 'ሏ', 'words_practice': 'computer', 'image_practice': 'pictures/computer.jpg'},
      {'symbols': None, 'amharic_set1': 'ነ', 'words_set1': 'school', 'amharic_set2': '፠', 'words_set2': 'work', 'amharic_set3': 'ሴ', 'words_set3': 'rich', 'amharic_set4': 'ኼ', 'words_set4': 'cinema', 'amharic_practices': 'ወ', 'words_practice': 'have', 'image_practice': 'pictures/have.jpg'}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
    Routine LoadCharacters
  LoopTerminator LoopParameters
  Routine loadAndRemoveNone
  Routine GenerateQuestions
  Routine practice_welcome
  LoopInitiator pracitce_wrds loopType="TrialHandler"
    loopType = random
    nReps = numReps
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    conditions:
      [{'symbols': '✓', 'amharic_set1': 'ቮ', 'words_set1': 'cats', 'amharic_set2': 'ኈ', 'words_set2': 'fishing', 'amharic_set3': 'ሐ', 'words_set3': 'go', 'amharic_set4': 'ና', 'words_set4': 'dance', 'amharic_practices': '፨', 'words_practice': 'hike', 'image_practice': 'pictures/hike.jpg'},
      {'symbols': '✗', 'amharic_set1': 'ተ', 'words_set1': 'north', 'amharic_set2': 'ኴ', 'words_set2': 'book', 'amharic_set3': 'ሜ', 'words_set3': 'artist', 'amharic_set4': 'ኞ', 'words_set4': 'education', 'amharic_practices': '፻', 'words_practice': 'I', 'image_practice': 'pictures/I.jpg'},
      {'symbols': None, 'amharic_set1': 'ቺ', 'words_set1': 'map', 'amharic_set2': 'ዄ', 'words_set2': 'mirror', 'amharic_set3': 'ሣ', 'words_set3': 'ring', 'amharic_set4': 'ኧ', 'words_set4': 'smart', 'amharic_practices': 'ቇ', 'words_practice': 'be', 'image_practice': 'pictures/be.jpg'},
      {'symbols': None, 'amharic_set1': 'ኇ', 'words_set1': 'travel', 'amharic_set2': 'ጕ', 'words_set2': 'happy', 'amharic_set3': 'ሯ', 'words_set3': 'downtown', 'amharic_set4': 'ኬ', 'words_set4': 'late', 'amharic_practices': 'ሏ', 'words_practice': 'computer', 'image_practice': 'pictures/computer.jpg'},
      {'symbols': None, 'amharic_set1': 'ነ', 'words_set1': 'school', 'amharic_set2': '፠', 'words_set2': 'work', 'amharic_set3': 'ሴ', 'words_set3': 'rich', 'amharic_set4': 'ኼ', 'words_set4': 'cinema', 'amharic_practices': 'ወ', 'words_practice': 'have', 'image_practice': 'pictures/have.jpg'}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
    Routine randomize_set
    LoopInitiator practice_sets1 loopType="TrialHandler"
      loopType = random
      nReps = 6
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      Routine Increment
      Routine practice_wrdss
      Routine plusBetween
    LoopTerminator practice_sets1
    Routine breakBetweenRepeats
  LoopTerminator pracitce_wrds
  Routine breakBetweenSets
  LoopInitiator practice_imagess loopType="TrialHandler"
    loopType = random
    nReps = numReps
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    conditions:
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    Routine randomize_set
    LoopInitiator practice_sets2 loopType="TrialHandler"
      loopType = random
      nReps = 6
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      Routine Increment
      Routine practice_images
      Routine plusBetween
    LoopTerminator practice_sets2
    Routine breakBetweenRepeats
  LoopTerminator practice_imagess
  LoopInitiator practice_testt loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine practice_test
    Routine checkForCorr_5
    LoopInitiator checkLoop loopType="TrialHandler"
      loopType = random
      nReps = checkmark_reps
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      Routine checkmark
    LoopTerminator checkLoop
    LoopInitiator xmarkLoop loopType="TrialHandler"
      loopType = random
      nReps = xmark_reps
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      Routine xmark
    LoopTerminator xmarkLoop
    Routine resetReps
    Routine blank500
  LoopTerminator practice_testt
  Routine WelcomeScreen
  LoopInitiator LearningSetOne loopType="TrialHandler"
    loopType = random
    nReps = numReps
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    Routine randomize_set
    LoopInitiator setOne loopType="TrialHandler"
      loopType = random
      nReps = 12
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      Routine Increment
      LoopInitiator nreps_A1 loopType="TrialHandler"
        loopType = random
        nReps = nreps_A
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        Routine amharic1_A
      LoopTerminator nreps_A1
      LoopInitiator nreps_B1 loopType="TrialHandler"
        loopType = random
        nReps = nreps_B
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        Routine amharic1_B
      LoopTerminator nreps_B1
      Routine plusBetween
    LoopTerminator setOne
    Routine breakBetweenRepeats
  LoopTerminator LearningSetOne
  Routine routine_30Seconds
  Routine start_test
  LoopInitiator testSet1 loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine test1_NEW
    Routine checkForCorr
    LoopInitiator checkloop loopType="TrialHandler"
      loopType = random
      nReps = checkmark_reps
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      Routine checkmark
    LoopTerminator checkloop
    LoopInitiator xloop loopType="TrialHandler"
      loopType = random
      nReps = xmark_reps
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      Routine xmark
    LoopTerminator xloop
    Routine resetReps
    Routine blank500
  LoopTerminator testSet1
  Routine breakBetweenSets
  LoopInitiator LearningSetTwo loopType="TrialHandler"
    loopType = random
    nReps = numReps
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    Routine randomize_set
    LoopInitiator setTwo loopType="TrialHandler"
      loopType = random
      nReps = 12
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      Routine Increment
      LoopInitiator nreps_A2 loopType="TrialHandler"
        loopType = random
        nReps = nreps_A
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        Routine amharic2_A
      LoopTerminator nreps_A2
      LoopInitiator nreps_B2 loopType="TrialHandler"
        loopType = random
        nReps = nreps_B
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        Routine amharic2_B
      LoopTerminator nreps_B2
      Routine plusBetween
    LoopTerminator setTwo
    Routine breakBetweenRepeats
  LoopTerminator LearningSetTwo
  Routine routine_30Seconds
  Routine start_test
  LoopInitiator testSet2 loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine test2_NEW
    Routine checkForCorr_2
    LoopInitiator checkloop2 loopType="TrialHandler"
      loopType = random
      nReps = checkmark_reps
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      Routine checkmark
    LoopTerminator checkloop2
    LoopInitiator xmark2 loopType="TrialHandler"
      loopType = random
      nReps = xmark_reps
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      Routine xmark
    LoopTerminator xmark2
    Routine resetReps
    Routine blank500
  LoopTerminator testSet2
  Routine breakBetweenSets
  LoopInitiator LearningSetThree loopType="TrialHandler"
    loopType = random
    nReps = numReps
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    Routine randomize_set
    LoopInitiator setThree loopType="TrialHandler"
      loopType = random
      nReps = 12
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      Routine Increment
      LoopInitiator nreps_A3 loopType="TrialHandler"
        loopType = random
        nReps = nreps_A
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        Routine amharic3_A
      LoopTerminator nreps_A3
      LoopInitiator nreps_B3 loopType="TrialHandler"
        loopType = random
        nReps = nreps_B
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        Routine amharic3_B
      LoopTerminator nreps_B3
      Routine plusBetween
    LoopTerminator setThree
    Routine breakBetweenRepeats
  LoopTerminator LearningSetThree
  Routine routine_30Seconds
  Routine start_test
  LoopInitiator testSet3 loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine test3_NEW
    Routine checkForCorr_3
    LoopInitiator checkloops3 loopType="TrialHandler"
      loopType = random
      nReps = checkmark_reps
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      Routine checkmark
    LoopTerminator checkloops3
    LoopInitiator xmarkloops3 loopType="TrialHandler"
      loopType = random
      nReps = xmark_reps
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      Routine xmark
    LoopTerminator xmarkloops3
    Routine resetReps
    Routine blank500
  LoopTerminator testSet3
  Routine breakBetweenSets
  LoopInitiator LearningSetFour loopType="TrialHandler"
    loopType = random
    nReps = numReps
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    Routine randomize_set
    LoopInitiator setFour loopType="TrialHandler"
      loopType = random
      nReps = 12
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      Routine Increment
      LoopInitiator nreps_A4 loopType="TrialHandler"
        loopType = random
        nReps = nreps_A
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        Routine amharic4_A
      LoopTerminator nreps_A4
      LoopInitiator nreps_B4 loopType="TrialHandler"
        loopType = random
        nReps = nreps_B
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        Routine amharic4_B
      LoopTerminator nreps_B4
      Routine plusBetween
    LoopTerminator setFour
    Routine breakBetweenRepeats
  LoopTerminator LearningSetFour
  Routine routine_30Seconds
  Routine start_test
  LoopInitiator testSet4 loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine test4_NEW
    Routine checkForCorr_4
    LoopInitiator checkmark_loop4 loopType="TrialHandler"
      loopType = random
      nReps = checkmark_reps
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      Routine checkmark
    LoopTerminator checkmark_loop4
    LoopInitiator xmark_loop4 loopType="TrialHandler"
      loopType = random
      nReps = xmark_reps
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      Routine xmark
    LoopTerminator xmark_loop4
    Routine resetReps
    Routine blank500
  LoopTerminator testSet4
  Routine breakBetweenSets
  Routine WelcomeSlide
  Routine Instructions
  LoopInitiator Trials loopType="TrialHandler"
    loopType = sequential
    nReps = 24
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    Routine TestQuestion
    Routine Evaluate
  LoopTerminator Trials
  Routine ThankYou
